PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.3411,0.3411,0.3411]
  expName = Representative Color
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Routines
  Routine WelcomeScreen
    ButtonComponent buttonSubmitWelcome
      bold = True
      borderColor = black
      color = black
      forceEndRoutine = True
      letterHeight = textSize
      pos = (buttonX, buttonY)
      size = (0.2, textSize+textboxHeight)
      startVal [time (s)] = 0
      text = Submit
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    TextComponent textWelcomeMessage
      color = black
      letterHeight = textSize
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Evaluating Perception of the Representative Color of a Complex Image
        Investigators: Dara Dimoff and Susan Farnand

        This research study is evaluating how observers average color information over an image. You will briefly be shown a series of images. Following each image, you will be shown an array of eight colors contained in the image. For each array, please determine which of the eight colors you feel best represents the overall color of the image by clicking on the appropriate color patch. This experiment should approximately take 20 minutes. Thank you for your participation.

        This experiment MUST be performed on a laptop or desktop monitor. Please not proceed if using a mobile device.

        CONFIDENTIALITY
        Your name will not be associated directly with your data. An identifier such as “Participant 11” will be used to identify your data. The information obtained will not be traceable back to you.

        RISKS AND BENEFITS
        There are no anticipated risks of participating in this study. The results of this experiment will provide information that should prove useful to the color science community.

        YOUR RIGHTS AS A RESEARCH PARTICIPANT
        Participation in this study is voluntary. You have the right not to participate at all, to stop the study at any time, or to request your data be removed from the study.

        CONTACTS FOR QUESTIONS OR CONCERNS
        You may contact Dara Dimoff at dhd2788@rit.edu or Susan Farnand at spfpci@rit.edu if you have questions about the study.
    TextComponent textElectronicSignature
      color = black
      letterHeight = textSize
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Electronic Signature:
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    TextComponent textDate
      color = black
      letterHeight = textSize
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Date (MM/DD/YY):
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    TextboxComponent textboxDate
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0, -0.35)
      size = (0.35, textSize+textboxHeight)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxElectronicSignature
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0, -0.3)
      size = (0.35, textSize+textboxHeight)
      startVal [time (s)] = 0.0
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    CodeComponent codeTextAlignWelcome
      Code Type = Both
      Begin JS Routine:
        // set the text elements to left-align
        textWelcomeMessage.setAlignHoriz("left");
        textElectronicSignature.setAlignHoriz("left");
        textDate.setAlignHoriz("left");

        // reposition them so they aren't left-aligning against the center
        var leftAlign;
        leftAlign = -0.5;

        textWelcomeMessage.setPos([leftAlign,0.1]);
        textElectronicSignature.setPos([leftAlign,-0.3]);
        textDate.setPos([leftAlign,-0.35]);

        // the button's default color is the same as the background. change it to
        // something lighter
        buttonSubmitWelcome.setFillColor(undefined);

        // make the button's text black
        buttonSubmitWelcome.setBorderColor([-1,-1,-1]);
        buttonSubmitWelcome.setColor([-1,-1,-1]);
        buttonSubmitWelcome.reset();
      Begin Routine:
        textWelcomeMessage.alignText='left'
        textElectronicSignature.alignText='left'
        textDate.alignText='left'
  Routine GoodbyeScreen
    TextComponent textGoodbye
      color = black
      letterHeight = textSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you for participating. If you have any questions about the experiment or if you experienced any issues, please contact Dara Dimoff at dhd2788@rit.edu.
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    ButtonComponent buttonGoodbye
      bold = True
      borderColor = black
      color = black
      forceEndRoutine = True
      letterHeight = textSize
      pos = (buttonX-0.1/2, buttonY)
      size = (0.3, None)
      startVal [time (s)] = 0
      text = Complete Experiment
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    CodeComponent codeGoodbye
      Code Type = Both
      Begin JS Routine:
        // set the text to left-align
        textGoodbye.setAlignHoriz("left");
        textGoodbye.setPos([leftAlign,0]);

        // change the button's background and text color
        buttonGoodbye.setFillColor(undefined);
        buttonGoodbye.setColor([-1,-1,-1]);
      Begin Routine:
        # hello
        hello = 0
  Routine blank1000
    TextComponent textBlankWaitOneSecond
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trialSelection
    TextComponent textQuestion
      color = black
      letterHeight = textSize
      pos = (0, 0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent firstChoice
      fillColor [set every repeat] = $colors[0].colorNorm
      lineColor [set every repeat] = $colors[0].colorNorm
      pos = (squareOffset/2*-1, squareOffset+squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = (squareSize, squareSize)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent secondChoice
      fillColor [set every repeat] = $colors[1].colorNorm
      lineColor [set every repeat] = $colors[1].colorNorm
      pos = (squareOffset/2, squareOffset+squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent thirdChoice
      fillColor [set every repeat] = $colors[2].colorNorm
      lineColor [set every repeat] = $colors[2].colorNorm
      pos = ((squareOffset/2+squareOffset)*-1, 0.06)
      saveStartStop = False
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent fourthChoice
      fillColor [set every repeat] = $colors[3].colorNorm
      lineColor [set every repeat] = $colors[3].colorNorm
      pos = (squareOffset/2+squareOffset, squareOffset/2)
      shape = rectangle
      size = (squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent fifthChoice
      fillColor [set every repeat] = $colors[4].colorNorm
      lineColor [set every repeat] = $colors[4].colorNorm
      pos = ((squareOffset+squareOffset/2)*-1,-squareOffset/2)
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent sixthChoice
      fillColor [set every repeat] = $colors[5].colorNorm
      lineColor [set every repeat] = $colors[5].colorNorm
      pos = (squareOffset+squareOffset/2,-squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent seventhChoice
      fillColor [set every repeat] = $colors[6].colorNorm
      lineColor [set every repeat] = $colors[6].colorNorm
      pos = (-squareOffset/2,-(squareOffset+squareOffset/2))
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent eighthChoice
      fillColor [set every repeat] = $colors[7].colorNorm
      lineColor [set every repeat] = $colors[7].colorNorm
      pos = (squareOffset/2,-(squareOffset+squareOffset/2))
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponse
      clickable = firstChoice,secondChoice,thirdChoice,fourthChoice,fifthChoice,sixthChoice,seventhChoice,eighthChoice
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent codeRecordSelection
      Code Type = Both
      Begin JS Routine:
        // add a question
        textQuestion.setText(Question);
      Begin Routine:
        # begin routine
        hello = 1
      End JS Routine:
        // not my finest coding moment, but we need to retrieve the index of the box
        // clicked from the object name
        selectedSquare = mouseResponse.clicked_name[0];
        id = (- 1);
        switch(selectedSquare) {
            case "firstChoice":
                id = 0;
                break;
            case "secondChoice":
                id = 1;
                break;
            case "thirdChoice":
                id = 2;
                break;
            case "fourthChoice":
                id = 3;
                break;
            case "fifthChoice":
                id = 4;
                break;
            case "sixthChoice":
                id = 5;
                break;
            case "seventhChoice":
                id = 6;
                break;
            case "eighthChoice":
                id = 7;
                break;
            default:
                id = -1;
        }
        // add custom variables to the data sheet: the color clicked and the index of the color
        psychoJS.experiment.addData('mouseResponseLocation', id);
        psychoJS.experiment.addData('choiceColor', colors[id].color);
        psychoJS.experiment.addData('choiceIndex', colors[id].index);
      End Routine:
        trials.addData('stimulus',File_Name)

        # get the user's selection position
        selectedSquare = mouseResponse.clicked_name[0]
        trials.addData('selectionLocation',selectedSquare)

        # map the selected position to the index of the corresponding color
        id = -1 # error
        if selectedSquare==('firstChoice'):
            id = 0
        elif selectedSquare==('secondChoice'):
            id = 1
        elif selectedSquare==('thirdChoice'):
            id = 2
        elif selectedSquare==('fourthChoice'):
            id = 3
        elif selectedSquare==('fifthChoice'):
            id = 4
        elif selectedSquare==('sixthChoice'):
            id = 5
        elif selectedSquare==('seventhChoice'):
            id = 6
        elif selectedSquare==('eighthChoice'):
            id = 7

        trials.addData('selectionId',ids[id])
        trials.addData('choice',colors[id])
        trials.nextEntry()
  Routine InitCode
    CodeComponent codeInit
      Code Type = Both
      Begin Experiment:
        import random, xlrd

        # set square variables
        squareSize = 0.1
        squareOffset = 0.12

        # set text variables
        textSize = 0.023
        textOffset = 0.08
        screenTop = 0.3

        # manual data storage
        trials = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath='C:/Users/darad/Desktop/Research Project/Representative-Color/UI/Representative Color_lastrun.py',
            savePickle=True, saveWideText=True,
            dataFileName='data/results')

        # randomize the seed
        random.seed()
      Begin JS Experiment:
        // import shuffle function for shuffling lists
        shuffle = util.shuffle;

        // square variables
        squareSize = 0.1;
        squareOffset = 0.12;

        // text variables
        textSize = 0.023;
        textOffset = 0.08;
        screenTop = 0.3;
        textboxHeight = 0.005;

        // define the left boundary for text on the screen
        leftAlign = -0.5;

        // keep track of user's progress
        progress = 0;

        // button locations
        buttonX = 0.42;
        buttonY = -0.35;
  Routine randomizeColors
    CodeComponent codeRandomizeColors
      Code Type = Both
      Begin JS Routine:
        // array for the stimuli
        colors = [];

        // convert the color strings to decimal arrays
        var norms = [];
        norms.push(color1.split(',').map(Number));
        norms.push(color2.split(',').map(Number));
        norms.push(color3.split(',').map(Number));
        norms.push(color4.split(',').map(Number));
        norms.push(color5.split(',').map(Number));
        norms.push(color6.split(',').map(Number));
        norms.push(color7.split(',').map(Number));
        norms.push(color8.split(',').map(Number));

        // normalize the colors from [0 1] to [-1 -1]
        for(var i = 0; i < 8; i++){
            for(var j = 0; j < 3; j++){
                norms[i][j] = norms[i][j]*2 - 1;
            }
        }

        // create color objects
        const c1 = {color: color1, colorNorm: norms[0], index: 1};
        const c2 = {color: color2, colorNorm: norms[1], index: 2};
        const c3 = {color: color3, colorNorm: norms[2], index: 3};
        const c4 = {color: color4, colorNorm: norms[3], index: 4};
        const c5 = {color: color5, colorNorm: norms[4], index: 5};
        const c6 = {color: color6, colorNorm: norms[5], index: 6};
        const c7 = {color: color7, colorNorm: norms[6], index: 7};
        const c8 = {color: color8, colorNorm: norms[7], index: 8};
        colors.push(c1);
        colors.push(c2);
        colors.push(c3);
        colors.push(c4);
        colors.push(c5);
        colors.push(c6);
        colors.push(c7);
        colors.push(c8);

        // shuffle the list
        shuffle(colors);
      Begin Routine:
        # array for the stimuli
        colors = []
        colors.append(color1)
        colors.append(color2)
        colors.append(color3)
        colors.append(color4)
        colors.append(color5)
        colors.append(color6)
        colors.append(color7)
        colors.append(color8)

        # index array (which color did they choose based on the UNRANDOMIZED list)
        ids = [1,2,3,4,5,6,7,8]

        temp = list(zip(colors,ids))

        # shuffle color order
        random.shuffle(temp)

        colors, ids = zip(*temp)
  Routine showImage
    ImageComponent imageScramble
      image [set every repeat] = $File_Name
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Instructions
    TextComponent textInstructions
      color = black
      letterHeight = 0.023
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS
        Before continuing, please make sure that any color filters on your monitor are disabled for the duration of this study (ie. blue light filters at night). Please avoid looking at other screens, including your phone, during the duration of the study. This experiment MUST be performed on a laptop or desktop monitor. Please not proceed if using a mobile device.

        You will be presented with an image for one second and then will be asked to select the color that best represents the image you just saw.

        To select the best representative color, left click on that square.

        This experiment will take you approximately 20 minutes. Thank you for your participation.

        WARNING
        If you press the "Escape" key at any point during the experiment, the experiment will terminate early. If you do not wish to lose your progress, do not press the "Escape" key.

        Press "Continue" to begin the experiment.
    ButtonComponent buttonContinue
      bold = True
      borderColor = black
      color = black
      fillColor = lightgrey
      forceEndRoutine = True
      letterHeight = textSize
      pos = (0.42, -0.35)
      size = (0.2, None)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent codeInstructions
      Code Type = Both
      Begin JS Routine:
        // set the text to left-align
        textInstructions.setAlignHoriz("left");
        textInstructions.setPos([leftAlign,0]);

        // change the button's background and text color
        buttonContinue.setFillColor(undefined);
        buttonContinue.setColor([-1,-1,-1]);
      Begin Routine:
        textInstructions.alignText='left'
  Routine BackgroundInformation
    TextComponent textInitials
      color = black
      letterHeight = textSize
      pos = (0, screenTop)
      startVal [time (s)] = 0.0
      text = Observer Initials:
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    TextComponent textViewingConditions
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset)
      startVal [time (s)] = 0.0
      text = Viewing Conditions: 
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    TextComponent textColorScientist
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*2)
      startVal [time (s)] = 0.0
      text = Do you have experience in imaging?
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    TextComponent textAge
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*3)
      startVal [time (s)] = 0.0
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      text:
        Age:
        (Note: if you are under 18, you may participate,
        but your data will not be used)
    TextComponent textCVD
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you have a color vision deficiency?
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    TextComponent textGenderIdentification
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*4)
      startVal [time (s)] = 0.0
      text = Gender Identification:
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    TextboxComponent textboxAge
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0.22, screenTop-textOffset*3)
      saveStartStop = False
      size = (0.45, textSize+textboxHeight)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxInitials
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0.22, screenTop)
      size = (0.45, textSize+textboxHeight)
      startVal [time (s)] = 0.0
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    SliderComponent sliderViewConditions
      borderColor = $[0,0,0]
      color = Black
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Indoor', 'Outdoor'
      letterHeight = 0.01
      pos = (0.1, screenTop-textOffset)
      saveStartStop = False
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    SliderComponent sliderColorScientist
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes','No'
      letterHeight = textSize/2
      pos = (0.1, screenTop-textOffset*2)
      saveStartStop = False
      size = (0.15, 0.01)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    SliderComponent sliderCVD
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes','No','Unsure'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset*5)
      saveStartStop = False
      size = (0.225, 0.01)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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    SliderComponent sliderGenderIdentification
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Female','Male','Nonbinary','Prefer not\nto respond'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset*4)
      saveStartStop = False
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    ButtonComponent buttonSubmitBackground
      bold = True
      borderColor = black
      color = black
      forceEndRoutine = True
      letterHeight = textSize
      pos = (-0.42, -0.35)
      size = (0.2, textSize+0.05)
      startVal [time (s)] = 0
      text = Submit
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    CodeComponent codeBackground
      Code Type = Both
      Begin JS Routine:
        // set the text boxes to empty
        textboxInitials.setText('');
        textboxAge.setText('');

        // align text components to the left
        textInitials.setAlignHoriz("left");
        textViewingConditions.setAlignHoriz("left");
        textColorScientist.setAlignHoriz("left");
        textAge.setAlignHoriz("left");
        textGenderIdentification.setAlignHoriz("left");
        textCVD.setAlignHoriz("left");

        // set positions for the text boxes
        textInitials.setPos([leftAlign,screenTop]);
        textViewingConditions.setPos([leftAlign,screenTop-textOffset]);
        textColorScientist.setPos([leftAlign,screenTop-textOffset*2]);
        textAge.setPos([leftAlign,screenTop-textOffset*3]);
        textGenderIdentification.setPos([leftAlign,screenTop-textOffset*4]);
        textCVD.setPos([leftAlign,screenTop-textOffset*5]);

        // set button color to undefined
        buttonSubmitBackground.setFillColor(undefined);
        buttonSubmitBackground.setColor([-1,-1,-1]);

        // re-construct the sliders since there is no existing function to modify fontSize
        var sliderFontSize = 0.018;
        var sliderSize = 0.075;
        var sliderOffset = 0.05;
        var extra = 0.07;

        sliderViewConditions = new visual.Slider({
            win: psychoJS.window, name: 'sliderViewConditions',
            size: [sliderSize*3+extra, 0.01], pos: [sliderOffset + sliderSize*3/2 + extra/2, (screenTop - textOffset)], units: 'height',
            labels: ["Indoor (dim)", "Indoor (light)", "Outdoor"], ticks: [1, 2, 3],
            granularity: 1.0, style: ["RADIO"],
            color: new util.Color('Black'), markerColor: new util.Color('Black'), lineColor: new util.Color([0, 0, 0]),
            fontFamily: 'Open Sans', bold: false, italic: false, depth: -7,
            flip: false, fontSize: sliderFontSize});

          sliderColorScientist = new visual.Slider({
            win: psychoJS.window, name: 'sliderColorScientist',
            size: [sliderSize*2, 0.01], pos: [sliderOffset + sliderSize*2/2, (screenTop - (textOffset * 2))], units: 'height',
            labels: ["Yes", "No"], ticks: [1, 2],
            granularity: 1.0, style: ["RADIO"],
            color: new util.Color('black'), markerColor: new util.Color('black'), lineColor: new util.Color([0, 0, 0]),
            fontFamily: 'Open Sans', bold: false, italic: false, depth: -8,
            flip: false, fontSize: sliderFontSize
          });

          sliderGenderIdentification = new visual.Slider({
            win: psychoJS.window, name: 'sliderGenderIdentification',
            size: [sliderSize*4+extra*2, 0.01], pos: [sliderOffset + sliderSize*4/2 + extra, (screenTop - (textOffset * 4))], units: 'height',
            labels: ["Female", "Male", "Nonbinary", "Prefer not\nto respond"], ticks: [1, 2, 3, 4],
            granularity: 1.0, style: ["RADIO"],
            color: new util.Color('black'), markerColor: new util.Color('black'), lineColor: new util.Color([0, 0, 0]),
            fontFamily: 'Open Sans', bold: false, italic: false, depth: -11,
            flip: false, fontSize: sliderFontSize
          });

          sliderCVD = new visual.Slider({
            win: psychoJS.window, name: 'sliderCVD',
            size: [sliderSize*3+extra, 0.01], pos: [sliderOffset + sliderSize*3/2 + extra/2, (screenTop - (textOffset * 5))], units: 'height',
            labels: ["Yes", "No", "Unsure"], ticks: [1, 2, 3],
            granularity: 1.0, style: ["RADIO"],
            color: new util.Color('black'), markerColor: new util.Color('black'), lineColor: new util.Color([0, 0, 0]),
            fontFamily: 'Open Sans', bold: false, italic: false, depth: -10,
            flip: false, fontSize: sliderFontSize
          });

        // after making changes to the sliders, call the reset functions
        sliderViewConditions.reset();
        sliderColorScientist.reset();
        sliderGenderIdentification.reset();
        sliderCVD.reset();
      Begin Routine:
        textInitials.alignText='left'
        textViewingConditions.alignText='left'
        textColorScientist.alignText='left'
        textAge.alignText='left'
        textGenderIdentification.alignText='left'
        textCVD.alignText='left'
        ratingScale = visual.RatingScale(win)
  Routine blockBegin
    TextComponent textBlockBegin
      color = black
      letterHeight = textSize
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent codeBlockBegin
      Code Type = Both
      Begin JS Routine:
        // set the text to left-align
        textBlockBegin.setAlignHoriz("left");
        textBlockBegin.setPos([leftAlign,0]);

        // change the button's background and text color
        buttonBlockBegin.setFillColor(undefined);
        buttonBlockBegin.setColor([-1,-1,-1]);

        // update the user's progress
        var textAboutToBegin = '';
        if(progress == 0){
            textAboutToBegin += 'This first section contains training images. Your responses will not be recorded and will instead serve as an opportunity for you to understand what the experiment will look like.'
        } else{
            textAboutToBegin += 'Section '+ progress + '/4 is about to begin. If you need to take a break, please do so on this screen.';
        }
        textBlockBegin.setText(textAboutToBegin);

        if(progress == 0){
            progressText = 'Begin Training';
        } else {
            progressText = 'Begin Section ' + progress + '/4';
        }

        progress = progress + 1;
      Begin Routine:
        # i put dummy code here so psychopy would recognize that there's JS code in here
        hello = 1
    ButtonComponent buttonBlockBegin
      bold = True
      borderColor = black
      color = black
      forceEndRoutine = True
      letterHeight = textSize
      pos = (-buttonX+0.045/2, buttonY)
      size = (0.245, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $progressText
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  Routine PressSpacebar
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blank100
    TextComponent textBlankWait
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine InitCode
  Routine blank100
  Routine WelcomeScreen
  Routine BackgroundInformation
  Routine Instructions
  LoopInitiator trialsBlock loopType="TrialHandler"
    conditionsFile = resources\conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cond_file': 'resources/training.xlsx'},
      {'cond_file': 'resources/trialScramble.xlsx'},
      {'cond_file': 'resources/trialSixteen.xlsx'},
      {'cond_file': 'resources/trialSixtyFour.xlsx'},
      {'cond_file': 'resources/trialFull.xlsx'}]
    Routine blockBegin
    LoopInitiator trialsStimuli loopType="TrialHandler"
      conditionsFile = $cond_file
      isTrials = False
      loopType = random
      nReps = 1
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      Routine blank1000
      Routine showImage
      Routine blank1000
      Routine randomizeColors
      Routine trialSelection
    LoopTerminator trialsStimuli
  LoopTerminator trialsBlock
  Routine GoodbyeScreen
