PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600,900]
  color = $[0.3411,0.3411,0.3411]
  expName = Representative Color
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Routines
  Routine WelcomeScreen
    TextComponent textWelcomeMessage
      color = black
      letterHeight = textSize
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Evaluating Perception of the Representative Color of a Complex Image
        Investigators: Dara Dimoff and Susan Farnand

        This research study is evaluating how observers average color information over an image. You will briefly be shown a series of images. Following each image, you will be shown an array of nine colors contained in the image. For each array, please determine which of the nine colors you feel best represents the overall color of the image by clicking on the appropriate color patch. This experiment should approximately take 20 minutes. Thank you for your participation.

        CONFIDENTIALITY
        Your name will not be associated directly with your data. An identifier such as “Participant 11” will be used to identify your data. The information obtained will not be traceable back to you.

        RISKS AND BENEFITS
        There are no anticipated risks of participating in this study. The results of this experiment will provide information that should prove useful to the color science community.

        YOUR RIGHTS AS A RESEARCH PARTICIPANT
        Participation in this study is voluntary. You have the right not to participate at all, to stop the study at any time, or to request your data be removed from the study. Just let us know if you would like to stop for any reason.

        CONTACTS FOR QUESTIONS OR CONCERNS
        You may contact Dara Dimoff at dhd2788@rit.edu or Susan Farnand at spfpci@rit.edu if you have questions about the study.
    TextComponent textElectronicSignature
      color = black
      letterHeight = textSize
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Electronic Signature:
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    TextboxComponent textboxElectronicSignature
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0, -0.3)
      size = (0.45, None)
      startVal [time (s)] = 0.0
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    TextComponent textDate
      color = black
      letterHeight = textSize
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Date (MM/DD/YY):
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    TextboxComponent textboxDate
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0, -0.35)
      size = (0.45, None)
      startVal [time (s)] = 0.0
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    ButtonComponent buttonSubmit
      bold = True
      borderColor = black
      color = black
      fillColor = lightgrey
      forceEndRoutine = True
      letterHeight = textSize
      pos = (0.42, -0.35)
      size = (0.2, None)
      startVal [time (s)] = 0
      text = Submit
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    CodeComponent codeTextAlignWelcome
      Code Type = Auto->JS
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      Begin Routine:
        textWelcomeMessage.alignText='left'
        textElectronicSignature.alignText='left'
        textDate.alignText='left'
  Routine GoodbyeScreen
    TextComponent goodbyeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating
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    KeyboardComponent keyEndTrial
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank1000
    TextComponent textBlankWaitOneSecond
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trialSelection
    PolygonComponent firstChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[0].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[0].split(',')]
      pos = (squareOffset/2*-1, squareOffset+squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = (squareSize, squareSize)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent secondChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[1].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[1].split(',')]
      pos = (squareOffset/2, squareOffset+squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent thirdChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[2].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[2].split(',')]
      pos = ((squareOffset/2+squareOffset)*-1, 0.06)
      saveStartStop = False
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent fourthChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[3].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[3].split(',')]
      pos = (squareOffset/2+squareOffset, squareOffset/2)
      shape = rectangle
      size = (squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent fifthChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[4].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[4].split(',')]
      pos = ((squareOffset+squareOffset/2)*-1,-squareOffset/2)
      shape = rectangle
      size = $(squareSize, squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent sixthChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[5].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[5].split(',')]
      pos = (squareOffset+squareOffset/2,-squareOffset/2)
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent seventhChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[6].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[6].split(',')]
      pos = (-squareOffset/2,-(squareOffset+squareOffset/2))
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    PolygonComponent eighthChoice
      fillColor [set every repeat] = $[float(i)*2-1 for i in colors[7].split(',')]
      lineColor [set every repeat] = $[float(i)*2-1 for i in colors[7].split(',')]
      pos = (squareOffset/2,-(squareOffset+squareOffset/2))
      saveStartStop = False
      shape = rectangle
      size = (squareSize,squareSize)
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponse
      clickable = firstChoice,secondChoice,thirdChoice,fourthChoice,fifthChoice,sixthChoice,seventhChoice,eighthChoice
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,fillColor,
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent codeRecordSelection
      Code Type = Auto->JS
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      End Routine:
        trials.addData('stimulus',File_Name)

        # get the user's selection position
        selectedSquare = mouseResponse.clicked_name[0]
        trials.addData('selectionLocation',selectedSquare)

        # map the selected position to the index of the corresponding color
        id = -1 # error
        if selectedSquare==('firstChoice'):
            id = 0
        elif selectedSquare==('secondChoice'):
            id = 1
        elif selectedSquare==('thirdChoice'):
            id = 2
        elif selectedSquare==('fourthChoice'):
            id = 3
        elif selectedSquare==('fifthChoice'):
            id = 4
        elif selectedSquare==('sixthChoice'):
            id = 5
        elif selectedSquare==('seventhChoice'):
            id = 6
        elif selectedSquare==('eighthChoice'):
            id = 7

        trials.addData('selectionId',ids[id])
        trials.addData('choice',colors[id])
        trials.nextEntry()
  Routine InitCode
    CodeComponent codeInit
      Code Type = Auto->JS
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      Begin Experiment:
        import random, xlrd

        # set square variables
        squareSize = 0.1
        squareOffset = 0.12

        # set text variables
        textSize = 0.023
        textOffset = 0.08
        screenTop = 0.3

        # manual data storage
        trials = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath='C:/Users/darad/Desktop/Research Project/Representative-Color/UI/Representative Color_lastrun.py',
            savePickle=True, saveWideText=True,
            dataFileName='data\\results')

        # randomize the seed
        random.seed()
  Routine randomizeColors
    CodeComponent codeRandomizeColors
      Code Type = Auto->JS
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      Begin Routine:
        # array for the stimuli
        colors = []
        colors.append(color1)
        colors.append(color2)
        colors.append(color3)
        colors.append(color4)
        colors.append(color5)
        colors.append(color6)
        colors.append(color7)
        colors.append(color8)

        # index array (which color did they choose based on the UNRANDOMIZED list)
        ids = [1,2,3,4,5,6,7,8]

        temp = list(zip(colors,ids))

        # shuffle color order
        random.shuffle(temp)

        colors, ids = zip(*temp)
  Routine showImage
    ImageComponent imageScramble
      image [set every repeat] = $'Images/' + File_Name
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Instructions
    TextComponent textInstructions
      color = black
      letterHeight = 0.023
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS
        This research study is looking to understand how human vision "averages" color on objects that are not uniform in color.

        Please make sure that any color filters on your monitor are disabled for the duration of this study (ie. blue light filters at night). You will be presented with an image for one second and then will be asked to select the color that best represents the image you just saw.

        To select the best representative color, left click on that square.

        This experiment will take you approximately 20 minutes. Thank you for your participation. We will begin by collecting some background information.

        Press "Continue" to begin the experiment.
    ButtonComponent buttonContinue
      bold = True
      borderColor = black
      color = black
      fillColor = lightgrey
      forceEndRoutine = True
      letterHeight = textSize
      pos = (0, -0.35)
      size = (0.2, None)
      startVal [time (s)] = 0
      text = Continue
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    CodeComponent codeInstructions
      Code Type = Auto->JS
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      Begin Routine:
        textInstructions.alignText='left'
  Routine BackgroundInformation
    TextComponent textInitials
      color = black
      letterHeight = textSize
      pos = (0, screenTop)
      startVal [time (s)] = 0.0
      text = Observer Initials:
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    TextComponent textViewingConditions
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset)
      startVal [time (s)] = 0.0
      text = Viewing Conditions: 
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    TextComponent textColorScientist
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*2)
      startVal [time (s)] = 0.0
      text = Do you have experience in imaging?
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    TextComponent textAge
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*3)
      startVal [time (s)] = 0.0
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      text:
        Age:
        (Note: if you are under 18, you may participate,
        but your data will not be used)
    TextComponent textCVD
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you have a color vision deficiency?
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    TextComponent textGenderIdentification
      color = black
      letterHeight = textSize
      pos = (0, screenTop-textOffset*4)
      startVal [time (s)] = 0.0
      text = Gender Identification:
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    TextboxComponent textboxInitials
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0.2, screenTop)
      size = (0.45, None)
      startVal [time (s)] = 0.0
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    SliderComponent sliderViewConditions
      borderColor = $[0,0,0]
      color = Black
      fillColor = Black
      forceEndRoutine = False
      granularity = 1
      labels = 'Indoor', 'Outdoor'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset)
      saveStartStop = False
      size = (0.15, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    SliderComponent sliderColorScientist
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes','No'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset*2)
      saveStartStop = False
      size = (0.15, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    TextboxComponent textboxAge
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = textSize
      pos = (0.2, screenTop-textOffset*3)
      saveStartStop = False
      size = (0.45, None)
      startVal [time (s)] = 0.0
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    SliderComponent sliderCVD
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes','No','Unsure'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset*5)
      saveStartStop = False
      size = (0.225, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent codeBackground
      Code Type = Auto->JS
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      Begin Routine:
        textInitials.alignText='left'
        textViewingConditions.alignText='left'
        textColorScientist.alignText='left'
        textAge.alignText='left'
        textGenderIdentification.alignText='left'
        textCVD.alignText='left'
        ratingScale = visual.RatingScale(win)
    SliderComponent sliderGenderIdentification
      borderColor = $[0,0,0]
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Female','Male','Nonbinary','Prefer not\nto respond'
      letterHeight = textSize
      pos = (0.1, screenTop-textOffset*4)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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Flow
  Routine InitCode
  Routine WelcomeScreen
  Routine BackgroundInformation
  Routine Instructions
  LoopInitiator trialsBlock loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cond_file': 'trialScramble.xlsx'},
      {'cond_file': 'trialSixteen.xlsx'},
      {'cond_file': 'trialSixtyFour.xlsx'},
      {'cond_file': 'trialFull.xlsx'}]
    LoopInitiator trialsStimuli loopType="TrialHandler"
      conditionsFile = $cond_file
      isTrials = False
      loopType = random
      nReps = 1
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      Routine blank1000
      Routine showImage
      Routine blank1000
      Routine randomizeColors
      Routine trialSelection
    LoopTerminator trialsStimuli
  LoopTerminator trialsBlock
  Routine GoodbyeScreen
